PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Delay Discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 80, 'future_reward': 99, 'delay': 42},
      {'reward_today': 51, 'future_reward': 54, 'delay': 16},
      {'reward_today': 18, 'future_reward': 42, 'delay': 10},
      {'reward_today': 49, 'future_reward': 56, 'delay': 91},
      {'reward_today': 81, 'future_reward': 85, 'delay': 47},
      {'reward_today': 62, 'future_reward': 64, 'delay': 93},
      {'reward_today': 17, 'future_reward': 20, 'delay': 44},
      {'reward_today': 10, 'future_reward': 21, 'delay': 66},
      {'reward_today': 10, 'future_reward': 29, 'delay': 11},
      {'reward_today': 67, 'future_reward': 87, 'delay': 21},
      {'reward_today': 33, 'future_reward': 53, 'delay': 84},
      {'reward_today': 81, 'future_reward': 93, 'delay': 43},
      {'reward_today': 39, 'future_reward': 50, 'delay': 98},
      {'reward_today': 80, 'future_reward': 99, 'delay': 95},
      {'reward_today': 45, 'future_reward': 58, 'delay': 41},
      {'reward_today': 74, 'future_reward': 99, 'delay': 80},
      {'reward_today': 38, 'future_reward': 53, 'delay': 54},
      {'reward_today': 87, 'future_reward': 90, 'delay': 10},
      {'reward_today': 45, 'future_reward': 64, 'delay': 99},
      {'reward_today': 71, 'future_reward': 86, 'delay': 71}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
    Routine trial
  LoopTerminator trials
