PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome. This experiment studies how words influence each other.
        On each trial you will first see a word briefly, followed by another string of letters.
        Decide whether the target is a "REAL" English word or NOT a real word.
        Press 'm' if the target is a "Word". Press 'z' if the target is a "Non-word".
        Try to respond as quickly and accurately as possible. You will do a short practice first. Press SPACE to begin.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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  Routine prime
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    TextComponent prime_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] =  prime
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  Routine gap
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    TextComponent gap1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine target_response
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    TextComponent target_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $target
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # key_resp is the keyboard component's name; adapt if different
        if key_resp.keys:
            thisResp = key_resp.keys[0]
            thisExp.addData('response', thisResp)
            correct = (thisResp == str(correct_key))
            thisExp.addData('correct', correct)
        else:
            thisExp.addData('response', '')
            thisExp.addData('correct', False)
  Routine iti
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = feedback_text
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Determine feedback_text for practice block
        if key_resp.keys:
            if key_resp.keys[0] == str(correct_key):
                feedback_text = "Correct"
            else:
                feedback_text = "Incorrect"
        else:
            feedback_text = "No response"
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating.
        The experiment is now complete.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solo project_conditions-2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'doctor', 'target': 'nurse', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'cat', 'target': 'dog', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'sun', 'target': 'light', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'bread', 'target': 'butter', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'teacher', 'target': 'student', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'mother', 'target': 'child', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'car', 'target': 'engine', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'phone', 'target': 'call', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'book', 'target': 'page', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'river', 'target': 'water', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'bird', 'target': 'wing', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'heart', 'target': 'beat', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'music', 'target': 'song', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'},
      {'prime': 'king', 'target': 'queen', 'relation': 'related', 'target_type': 'word', 'correct_key': 'm'}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
    Routine prime
    Routine gap
    Routine target_response
  LoopTerminator trials
  Routine iti
  Routine end
